CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['Captures the name of the folder (FolderName) which contains the analysed image']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<FolderName>[^\\]+)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Omits w1DAPI since it is only used to find z-plane of sample']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:dapichannel
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:gfpchannel
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "mCherry")
    Name to assign these images:mcherrychannel
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Cy5")
    Name to assign these images:cy5channel
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Detects DAPI stained nuclei']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
    Select the input image:dapichannel
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):35,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:0
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
RescaleIntensity:[module_num:6|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
    Select the input image:dapichannel
    Name the output image:rescaledapichannel
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,1.0
    Intensity range for the output image:0.0,65535
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
RescaleIntensity:[module_num:7|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
    Select the input image:gfpchannel
    Name the output image:rescalegfpchannel
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,1.0
    Intensity range for the output image:0.0,65535
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
RescaleIntensity:[module_num:8|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
    Select the input image:mcherrychannel
    Name the output image:rescalemcherrychannel
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,1.0
    Intensity range for the output image:0.0,65535
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
RescaleIntensity:[module_num:9|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
    Select the input image:cy5channel
    Name the output image:rescalecy5channel
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,1.0
    Intensity range for the output image:0.0,65535
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
MeasureObjectIntensity:[module_num:10|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notes:['Takes the nuclei object and measures intensity within this object of the DAPI and Cy5 channel']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
    Hidden:4
    Select an image to measure:rescaledapichannel
    Select an image to measure:rescalegfpchannel
    Select an image to measure:rescalemcherrychannel
    Select an image to measure:rescalecy5channel
    Select objects to measure:Nuclei

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|H:\\Results\\2020\\5-7-20 QIBC GM26 and C15 genotoxins - ADPr, RPA2 pS4-8, yH2AX\\yh2ax
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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